<?xml version='1.0' encoding='UTF-8'?>
<apex:apex version="1" xmlns:apex="http://med.kuleuven.be/exporl/apex/4.1.2/experiment" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/4.1.2/experiment https://exporl.med.kuleuven.be/apex/schemas/4.1.2/experiment.xsd" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">
  <!--  @doc
   @what: Training for constant procedure
   @description: A stimulus is presented after the user had indicated the trial by pressing a button on the screen
   @how: apex:trainingProcedure
  -->
  <procedure xsi:type="apex:trainingProcedure">
    <parameters>
      <presentations>10</presentations>
      <skip>0</skip>
      <order>sequential</order>
      <corrector xsi:type="apex:isequal"/>
    </parameters>
    <trials>
      <trial id="trial1">
        <answer>button1</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
      </trial>
      <trial id="trial2">
        <answer>button2</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus2"/>
      </trial>
      <trial id="trial3">
        <answer>button3</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus3"/>
      </trial>
    </trials>
  </procedure>
  <screens>
    <reinforcement>
      <progressbar>true</progressbar>
      <feedback length="300">true</feedback>
    </reinforcement>
    <screen id="screen1">
      <gridLayout id="main_layout" width="3" height="2">
        <button id="button1" x="1" y="1">
          <text>1</text>
        </button>
        <button id="button2" x="2" y="1">
          <text>2</text>
        </button>
        <button id="button3" x="3" y="1">
          <text>3</text>
        </button>
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="button1"/>
        <button id="button2"/>
        <button id="button3"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens>
  <datablocks>
    <prefix>closedset</prefix>
    <datablock id="rawdata1">
      <device>wavdevice</device>
      <description>sample raw datablock</description>
      <file>fly.wav</file>
    </datablock>
    <datablock id="rawdata2">
      <device>wavdevice</device>
      <description>sample raw datablock</description>
      <file>mouse.wav</file>
    </datablock>
    <datablock id="rawdata3">
      <device>wavdevice</device>
      <description>sample raw datablock</description>
      <file>star.wav</file>
    </datablock>
  </datablocks>
  <devices>
    <device id="wavdevice" xsi:type="apex:wavDeviceType">
      <driver>portaudio</driver>
      <card>interactive</card>
      <channels>2</channels>
      <gain>0</gain>
      <samplerate>44100</samplerate>
      <buffersize>512</buffersize>
    </device>
  </devices>
  <filters/>
  <stimuli>
    <fixed_parameters/>
    <stimulus id="stimulus1">
      <description>word</description>
      <datablocks>
        <datablock id="rawdata1"/>
      </datablocks>
    </stimulus>
    <stimulus id="stimulus2">
      <description>word</description>
      <datablocks>
        <datablock id="rawdata2"/>
      </datablocks>
    </stimulus>
    <stimulus id="stimulus3">
      <description>word</description>
      <datablocks>
        <datablock id="rawdata3"/>
      </datablocks>
    </stimulus>
  </stimuli>
  <connections/>
</apex:apex>
