<?xml version='1.0' encoding='UTF-8'?>
<apex:apex version="1" xmlns:apex="http://med.kuleuven.be/exporl/apex/4.0.0/experiment" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/4.0.0/experiment https://exporl.med.kuleuven.be/apex/schemas/4.0.0/experiment.xsd">
  <!-- @doc
    @what: Matching of stimulus and button - 5 presentations (1 trial)
    @description: auditive stimulus in right ear '1' - input: buttons 1 2 3 4 5 6 => match the stimulus with the button (stimulus1 => button1)
    @how: 1 trial - 6 stimuli and 6 buttons - 1 correct answer
  -->
  <procedure xsi:type="apex:constantProcedure">
    <parameters>
      <presentations>5</presentations>
      <skip>0</skip>
      <order>sequential</order>
      <corrector xsi:type="apex:isequal"/>
    </parameters>
    <trials>
      <trial id="trial1">
        <answer>button1</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
      </trial>
    </trials>
  </procedure>
  <screens>
    <reinforcement>
      <progressbar>true</progressbar>
      <feedback length="300">true</feedback>
      <showcurrent>false</showcurrent>
    </reinforcement>
    <screen id="screen1">
      <gridLayout width="3" height="2" id="main_layout">
        <button id="button1" x="1" y="1">
          <text>1</text>
        </button>
        <button id="button2" x="2" y="1">
          <text>2</text>
        </button>
        <button id="button3" x="3" y="1">
          <text>3</text>
        </button>
        <button id="button4" x="1" y="2">
          <text>4</text>
        </button>
        <button id="button5" x="2" y="2">
          <text>5</text>
        </button>
        <button id="button6" x="3" y="2">
          <text>6</text>
        </button>
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="button1"/>
        <button id="button2"/>
        <button id="button3"/>
        <button id="button4"/>
        <button id="button5"/>
        <button id="button6"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens>
  <datablocks>
    <prefix>../stimuli</prefix>
    <datablock id="rawdata1">
      <device>wavdevice</device>
      <file>wd1.wav</file>
    </datablock>
  </datablocks>
  <devices>
    <device xsi:type="apex:wavDeviceType" id="wavdevice">
      <driver>portaudio</driver>
      <card>interactive</card>
      <channels>2</channels>
      <gain channel="0">-50</gain>
      <samplerate>44100</samplerate>
      <buffersize>512</buffersize>
    </device>
  </devices>
  <filters/>
  <stimuli>
    <fixed_parameters/>
    <stimulus id="stimulus1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata1"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
  </stimuli>
  <connections/>
</apex:apex>
